<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Treadmill;assembly=AllenNeuralDynamics.Treadmill"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedSensorData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Encoder</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TorqueLoadCurrent</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Torque</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>torque</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>torque</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>441</dsp:BufferLength>
          <dsp:Frequency>2045</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Amplitude>100</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>1500</dsp:Cutoff1>
          <dsp:Cutoff2>2500</dsp:Cutoff2>
          <dsp:KernelLength>60</dsp:KernelLength>
          <dsp:FilterType>BandStop</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>400</dsp:Min>
          <dsp:Max>8000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>4048</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:SampleRate>44100</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>DispatchRate</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateSensorDataDispatchRatePayload">
          <p1:SensorDataDispatchRate>200</p1:SensorDataDispatchRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>